PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1.000,-1.000,-1.000]
  expName = ppp
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Routines
  Routine trial
    PolygonComponent polygon_trial_0
      fillColor [set every frame] = $[1,1,1]
      pos [set every repeat] = (mylocation[0][0], mylocation[0][1])
      shape = rectangle
      size [set every repeat] = (size_w, size_h)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dura
      units = pix
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    PolygonComponent polygon_trial_1
      fillColor [set every frame] = $[1,1,1]
      pos [set every repeat] = (mylocation[1][0], mylocation[1][1])
      shape = rectangle
      size [set every repeat] = (size_w, size_h)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dura
      units = pix
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    PolygonComponent polygon_trial_2
      fillColor [set every frame] = $[1,1,1]
      pos [set every repeat] = (mylocation[2][0], mylocation[2][1])
      shape = rectangle
      size [set every repeat] = (size_w,size_h)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dura
      units = pix
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    PolygonComponent polygon_trial_3
      fillColor [set every frame] = $[1,1,1]
      pos [set every repeat] = (mylocation[3][0], mylocation[3][1])
      shape = rectangle
      size [set every repeat] = (size_w,size_h)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dura
      units = pix
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    PolygonComponent polygon_trial_4
      fillColor = $[1,1,1]
      pos [set every repeat] = (mylocation[4][0], mylocation[4][1])
      shape = rectangle
      size [set every repeat] = (5,5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dura
      units = pix
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    PolygonComponent polygon_trial_5
      fillColor [set every frame] = $[1,1,1]
      pos [set every repeat] = (mylocation[5][0], mylocation[5][1])
      shape = rectangle
      size [set every repeat] = (size_w,size_h)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dura
      units = pix
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    PolygonComponent polygon_trial_6
      fillColor [set every frame] = $[1,1,1]
      pos [set every repeat] = (mylocation[6][0], mylocation[6][1])
      shape = rectangle
      size [set every repeat] = (size_w,size_h)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dura
      units = pix
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    PolygonComponent polygon_trial_7
      fillColor [set every repeat] = $[1,1,1]
      pos [set every repeat] = (mylocation[7][0], mylocation[7][1])
      shape = rectangle
      size [set every repeat] = (size_w,size_h)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dura
      units = pix
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    PolygonComponent polygon_trial_8
      fillColor [set every frame] = $[1,1,1]
      pos [set every repeat] = (mylocation[8][0], mylocation[8][1])
      shape = rectangle
      size [set every repeat] = (size_w,size_h)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dura
      units = pix
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        trial_dura = 1

        seleclist2 = [polygon_trial_0, polygon_trial_1, polygon_trial_2, polygon_trial_3, polygon_trial_5, polygon_trial_6, polygon_trial_7, polygon_trial_8]
      Each Frame:
        # peiyu code
        #f1 = 5
        #phi1 = 0
        #amp1 = (sin(2*pi*f1*frameN/60) - 0.5)*2
        #f2 = 20
        #phi2 = 0
        #amp2 = (sin(2 * pi * f2 * frameN / 60) - 0.5) * 2
        #polygon.setFillColor([amp1, amp1, amp1])
        #polygon_2.setFillColor([amp2, amp2, amp2])


        Amp = (sin(2*pi*Freq*frameN/60  + Phas) - 0.5)*2

        print(Amp)

        for idx in range(8):
            seleclist2[idx].setFillColor([Amp[idx]])
  Routine instr
    TextComponent text
      letterHeight = 50
      startVal [time (s)] = 0.0
      units = pix
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      text:
        脑机接口

        视觉刺激实验

        按"空格"继续

        可随时按"ESC"退出
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        # instr Begin Experiment
        import numpy as np

        Freq = np.array([8.00, 14.00, 10.00, 11.00, 12.00, 13.00, 9.00, 15.00])
        Phas = np.array([1.05,  0.10,  0.35,  1.40,  0.45, 0.70,  1.75,  0.80])

        varpy = [600,90]

        x0 = 1020*0/3 - 510
        x1 = 1020*1/3 - 510
        x2 = 1020*2/3 - 510
        x3 = 1020*3/3 - 510

        y0 = 1020*0/3 - 510
        y1 = 1020*1/3 - 510
        y2 = 1020*2/3 - 510
        y3 = 1020*3/3 - 510

        mylocation = [
        [(x0+x1)/2,(y2+y3)/2],
        [(x1+x2)/2,(y2+y3)/2],
        [(x2+x3)/2,(y2+y3)/2],

        [(x0+x1)/2,(y1+y2)/2],
        [(x1+x2)/2,(y1+y2)/2],
        [(x2+x3)/2,(y1+y2)/2],

        [(x0+x1)/2,(y0+y1)/2],
        [(x1+x2)/2,(y0+y1)/2],
        [(x2+x3)/2,(y0+y1)/2]
        ]

        size_w = 200
        size_h = 200
  Routine cue
    PolygonComponent polygon_0
      fillColor = $[1,1,1]
      pos [set every repeat] = (mylocation[0][0], mylocation[0][1])
      shape = rectangle
      size [set every repeat] = (size_w, size_h)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent polygon_1
      fillColor = $[1,1,1]
      pos [set every repeat] = (mylocation[1][0], mylocation[1][1])
      shape = rectangle
      size [set every repeat] = (size_w, size_h)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent polygon_2
      fillColor = $[1,1,1]
      pos [set every repeat] = (mylocation[2][0],mylocation[2][1])
      shape = rectangle
      size [set every repeat] = (size_w,size_h)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent polygon_3
      fillColor = $[1,1,1]
      pos [set every repeat] = (mylocation[3][0],mylocation[3][1])
      shape = rectangle
      size [set every repeat] = (size_w,size_h)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent polygon_4
      fillColor = $[1,1,1]
      pos [set every repeat] = (mylocation[4][0], mylocation[4][1])
      shape = rectangle
      size [set every repeat] = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent polygon_5
      fillColor = $[1,1,1]
      pos [set every repeat] = (mylocation[5][0], mylocation[5][1])
      shape = rectangle
      size [set every repeat] = (size_w, size_h)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent polygon_6
      fillColor = $[1,1,1]
      pos [set every repeat] = (mylocation[6][0], mylocation[6][1])
      shape = rectangle
      size [set every repeat] = (size_w, size_h)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent polygon_7
      fillColor = $[1,1,1]
      pos [set every repeat] = (mylocation[7][0], mylocation[7][1])
      shape = rectangle
      size [set every repeat] = (size_w, size_h)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent polygon_8
      fillColor = $[1,1,1]
      pos [set every repeat] = (mylocation[8][0], mylocation[8][1])
      shape = rectangle
      size [set every repeat] = (size_w, size_h)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        loop_id = -1
      Begin Routine:
        # peiyu code cue
        selecList = [polygon_0, polygon_1, polygon_2, polygon_3, polygon_5, polygon_6, polygon_7, polygon_8]
        selecList[ loop_id    %8].setFillColor([1.000,1.000,1.000]) # rgb
        loop_id += 1
        selecList[ loop_id    %8].setFillColor([1.000,-1.000,-1.000]) # rgb


        # peiyu code cue End
Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine cue
    Routine trial
  LoopTerminator trials
